# Demonstrates use of Twiss parameterization

i:Ts/TrackingVerbosity  =0
#---- Sequence
Ge/CheckForUnusedComponents = "False"
b:Ts/ShowCPUTime = "true"
i:Ts/ShowHistoryCountAtInterval = 1000000

i:Ts/Seed = 10

#---- Constants
d:Ge/MyBeamSizeInX = 5.0 cm
d:Ge/MyBeamSizeInY = 5.0 cm

#--- Physics
sv:Ph/Default/Modules =1 "g4em-standard_opt0"


#----- Primary: Twiss parameterization
s:So/Default/Type           = "twiss"
s:So/Default/Component      = "PlaneAtBeamPosition"
s:So/Default/BeamParticle   = "proton"
d:So/Default/BeamEnergy     = 150.00 MeV
u:So/Default/BeamEnergySpread = 1.0 
i:So/Default/NumberOfHistoriesInRun = 10000

u:So/Default/AlphaOfX      = 1.135
d:So/Default/BetaOfX       = 7.40 cm
d:So/Default/EmittanceOfX  = 1.2299 cm 
d:So/Default/SigmaOfX      = 0.2 cm
u:So/Default/SigmaOfXPrime = 0.01

u:So/Default/AlphaOfY      = 1.135
d:So/Default/BetaOfY       = -7.407 cm
d:So/Default/EmittanceOfY  = 1.2299 cm 
d:So/Default/SigmaOfY      = 0.2 cm
u:So/Default/SigmaOfYPrime = 0.03

#--- Beam Box 
s:Ge/PlaneAtBeamPosition/Type      = "G4Box"
s:Ge/PlaneAtBeamPosition/Material  = "Vacuum"
s:Ge/PlaneAtBeamPosition/Parent    = "World"
d:Ge/PlaneAtBeamPosition/HLX       = 0.5 cm + Ge/MyBeamSizeInX
d:Ge/PlaneAtBeamPosition/HLY       = 0.5 cm + Ge/MyBeamSizeInY
d:Ge/PlaneAtBeamPosition/HLZ       = 1.0 mm
d:Ge/PlaneAtBeamPosition/TransZ    = 1.0 m
d:Ge/PlaneAtBeamPosition/TransY    = 0. m
d:Ge/PlaneAtBeamPosition/TransX    = 0. m
d:Ge/PlaneAtBeamPosition/RotX      = 0. deg
d:Ge/PlaneAtBeamPosition/RotY      = 180. deg
d:Ge/PlaneAtBeamPosition/RotZ      = 0. deg

#--- Phase space scoring at Beam geometry
s:Sc/PsPrimary_0_Beam/Quantity             = "PhaseSpace"
b:Sc/PsPrimary_0_Beam/OutputToConsole      = "True"
s:Sc/PsPrimary_0_Beam/Surface              = "PlaneAtBeamPosition/ZPlusSurface"
s:Sc/PsPrimary_0_Beam/OutputType           = "ASCII" 
i:Sc/PsPrimary_0_Beam/PhaseSpaceBufferSize = 1000
b:Sc/PsPrimary_0_Beam/IncludeRunID         = "True"
b:Sc/PsPrimary_0_Beam/IncludeEventID       = "True"
b:Sc/PsPrimary_0_Beam/IncludeTrackID       = "True"
b:Sc/PsPrimary_0_Beam/IncludeTime          = "True"
b:Sc/PsPrimary_0_Beam/IncludeSeed          = "True"
s:Sc/PsPrimary_0_Beam/IfOutputFileAlreadyExists = "Overwrite"

#--- Target box the ZPlus surface at Iso center
s:Ge/PlaneAtIsoCenter/Type      = "G4Box"
s:Ge/PlaneAtIsoCenter/Material  = "Vacuum"
s:Ge/PlaneAtIsoCenter/Parent    = "World"
d:Ge/PlaneAtIsoCenter/HLX       = 2 * Ge/PlaneAtBeamPosition/HLX cm
d:Ge/PlaneAtIsoCenter/HLY       = 2 * Ge/PlaneAtBeamPosition/HLY cm
d:Ge/PlaneAtIsoCenter/HLZ       = 0.5 mm
d:Ge/PlaneAtIsoCenter/TransZ    = -1.0 * Ge/PlaneAtIsoCenter/HLZ cm
d:Ge/PlaneAtIsoCenter/TransY    = 0. m
d:Ge/PlaneAtIsoCenter/TransX    = 0. m
d:Ge/PlaneAtIsoCenter/RotX      = 0. deg
d:Ge/PlaneAtIsoCenter/RotY      = 0. deg
d:Ge/PlaneAtIsoCenter/RotZ      = 0. deg

#--- Phase space scoring at Iso center
s:Sc/PsPrimary_0_Iso/Quantity             = "PhaseSpace"
b:Sc/PsPrimary_0_Iso/OutputToConsole      = "True"
s:Sc/PsPrimary_0_Iso/Surface              = "PlaneAtIsoCenter/ZPlusSurface"
s:Sc/PsPrimary_0_Iso/OutputType           = "ASCII"
i:Sc/PsPrimary_0_Iso/PhaseSpaceBufferSize = 1000
b:Sc/PsPrimary_0_Iso/IncludeRunID         = "True"
b:Sc/PsPrimary_0_Iso/IncludeEventID       = "True"
b:Sc/PsPrimary_0_Iso/IncludeTrackID       = "True"
b:Sc/PsPrimary_0_Iso/IncludeTime          = "True"
b:Sc/PsPrimary_0_Iso/IncludeSeed          = "True"
s:Sc/PsPrimary_0_Iso/IfOutputFileAlreadyExists = "Overwrite"
