# Demonstrates ability to have more than one particle source
# Remember that the first source, So/Default, comes from built in
# default parameters.

Ge/World/Material = "Vacuum"

# Second beam component
s:Ge/XRayTube/Parent="World"
s:Ge/XRayTube/Type="Group"
d:Ge/XRayTube/TransX=200. cm
d:Ge/XRayTube/TransY=0. m
d:Ge/XRayTube/TransZ=0. m
d:Ge/XRayTube/RotX=0. deg
d:Ge/XRayTube/RotY=90. deg
d:Ge/XRayTube/RotZ=0. deg

# Second beam source
s:So/Imaging/Type = "Beam"
s:So/Imaging/Component = "XRayTube"
s:So/Imaging/BeamParticle = "gamma"
d:So/Imaging/BeamEnergy = 100. keV
u:So/Imaging/BeamEnergySpread = 0.
s:So/Imaging/BeamShape = "Ellipse"
d:So/Imaging/BeamHWX = 7. cm
d:So/Imaging/BeamHWY = 21. cm
d:So/Imaging/BeamAngularSpreadX = 0. rad
d:So/Imaging/BeamAngularSpreadY = 0. rad
s:So/Imaging/BeamXYDistribution = "Flat"
i:So/Imaging/NumberOfHistoriesInRun = 5

i:So/Default/NumberOfHistoriesInRun = 10

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1024
i:Gr/ViewA/WindowSizeY = 768
b:Gr/ViewA/IncludeAxes = "True"
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 2.

Ts/PauseBeforeQuit = "True"
