# Demonstrates use of a DICOM file.
# You must unzip Abdomen.zip before you run this example.
# Reads in and displays a 3 slice scan of an abdomen.
# The display writes very slowly to the screen.
# This will be improved in an upcoming new release.
# Until then, one useful trick is that if you iconize the graphics window,
# then un-inconize it when drawing is done, the drawing will go much faster.

includeFile = HUtoMaterialSchneider.txt 

Ge/World/Material = "Vacuum"
Ge/World/HLX=2.0 m
Ge/World/HLY=2.0 m
Ge/World/HLZ=2.0 m
b:Ge/World/Invisible = "TRUE"

s:Ge/Patient/Parent="World"
s:Ge/Patient/Material="Water"
s:Ge/Patient/Type= "TsDicomPatient"
d:Ge/Patient/TransX=0. m
d:Ge/Patient/TransY=0. m
d:Ge/Patient/TransZ=0. m
d:Ge/Patient/RotX=0. deg
d:Ge/Patient/RotY=0. deg
d:Ge/Patient/RotZ=0. deg
s:Ge/Patient/DicomDirectory = "Abdomen"

# Specify which slices to show.
# Comment this out or set to zero to show all slices.
# Set to -1 to show only center slice.
# Set to -2 to show first, center and last slice.
#iv:Ge/Patient/ShowSpecificSlicesX = 1 -2
#iv:Ge/Patient/ShowSpecificSlicesY = 1 -2
iv:Ge/Patient/ShowSpecificSlicesZ = 1 -1

So/Default/NumberOfHistoriesInRun = 10

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 70 deg
d:Gr/ViewA/Phi = 10 deg
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1000000

Ts/PauseBeforeQuit = "True"
