# Scorer - Energy fluence distribution on plane through isocenter
s:Sc/EnergyFluence/Quantity = "EnergyFluence"
s:Sc/EnergyFluence/Component= "Isocenter"
s:Sc/EnergyFluence/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyFluence/OutputType = "binary"

# Isocenter
s:Ge/Isocenter/Parent = "IEC_G"
s:Ge/Isocenter/Type   = "TsBox"
s:Ge/Isocenter/Material = "air"
d:Ge/Isocenter/HLX      = 30 cm 
d:Ge/Isocenter/HLY      = 30 cm 
d:Ge/Isocenter/HLZ      = 0.05 cm 
i:Ge/Isocenter/XBins    = 60
i:Ge/Isocenter/YBins    = 60
d:Ge/Isocenter/TransZ   = 0 cm 
s:Ge/Isocenter/DrawingStyle = "Solid"
s:Ge/Isocenter/Color = "skyblue"

