# Demonstrates use of a DICOM file.
# You must unzip Abdomen.zip before you run this example.
# Reads in and displays a 3 slice scan of an abdomen.
# The display writes very slowly to the screen.
# This will be improved in an upcoming new release.
# Until then, one useful trick is that if you iconize the graphics window,
# then un-inconize it when drawing is done, the drawing will go much faster.

# This example has three blocks of component definition to mimic beam delivery to a patient in a treatment room.

# 1. Coordination definition
# 2. Plan information: Gantry angle, couch angle, Plan Isocenter
# 2. DICOM Patient:
# 3. Beam setup
# 4. Dosegrid setup

includeFile = HUtoMaterialSchneider.txt


###################################################
# Coordination
###################################################
# World: Fixed coordination in IEC
s:Ge/World/Material  = "G4_AIR"
d:Ge/World/HLX       = 0.6 m
d:Ge/World/HLY       = 0.6 m
d:Ge/World/HLZ       = 0.6 m
b:Ge/World/Invisible = "T"
# IEC_G: Gantry
s:Ge/IEC_G/Parent  = "World"
s:Ge/IEC_G/Type    = "Group"
d:Ge/IEC_G/RotX    = 0. deg
d:Ge/IEC_G/RotY    = -1.0 * Ge/Gantry_Angle deg
d:Ge/IEC_G/RotZ    = 0. deg
d:Ge/IEC_G/TransX  = 0. m
d:Ge/IEC_G/TransY  = 0. m
d:Ge/IEC_G/TransZ  = 0. m

# IEC_S: Patient support
s:Ge/IEC_S/Parent  = "World"
s:Ge/IEC_S/Type    = "Group"
d:Ge/IEC_S/RotX    = 0. deg
d:Ge/IEC_S/RotY    = 0. deg
d:Ge/IEC_S/RotZ    = Ge/Couch_Angle deg
d:Ge/IEC_S/TransX  = 0. m
d:Ge/IEC_S/TransY  = 0. m
d:Ge/IEC_S/TransZ  = 0. m

# DICOM_to_IEC
s:Ge/DICOM_to_IEC/Type   = "Group"
s:Ge/DICOM_to_IEC/Parent = "IEC_S"
d:Ge/DICOM_to_IEC/TransX = 0 mm
d:Ge/DICOM_to_IEC/TransY = 0 mm
d:Ge/DICOM_to_IEC/TransZ = 0 mm
d:Ge/DICOM_to_IEC/RotX   = 90.0 deg
d:Ge/DICOM_to_IEC/RotY   = 0.0  deg
d:Ge/DICOM_to_IEC/RotZ   = 0.0  deg

####################################################
# Geometry parameters from plan
####################################################
#for plan
d:Ge/Gantry_Angle = 170.0 deg
d:Ge/Couch_Angle  = 0.0 deg

#Geant4: Abdomen CT's isocenter
d:Ge/IsoCenterX   = 15.3125 mm
d:Ge/IsoCenterY   = 206.7656 mm
d:Ge/IsoCenterZ   = -92.5 mm

#Beam is on Gantry coordination
Ge/BeamPosition/Parent = "IEC_G"
Ge/BeamPosition/TransZ = 25.0 cm

###################################################
#  Patient in DICOM
####################################################

s:Ge/Patient/Parent   = "DICOM_to_IEC"
s:Ge/Patient/Type     = "TsDicomPatient"
s:Ge/Patient/Material = "G4_WATER"
d:Ge/Patient/RotX     = 0.0 deg
d:Ge/Patient/RotY     = 0.0 deg
d:Ge/Patient/RotZ     = 0.0 deg
s:Ge/Patient/HUtoMaterialConversionMethod = "Schneider"

# Transient parametes
# DicomOrigin: a vector to CT cube's center
# note: patient positioning is properly done when the simulation starts
dc:Ge/Patient/DicomOriginX  = 0.0 mm
dc:Ge/Patient/DicomOriginY  = 0.0 mm
dc:Ge/Patient/DicomOriginZ  = 0.0 mm

d:Ge/Patient/TransX   = Ge/Patient/DicomOriginX - Ge/IsoCenterX mm
d:Ge/Patient/TransY   = Ge/Patient/DicomOriginY - Ge/IsoCenterY mm
d:Ge/Patient/TransZ   = Ge/Patient/DicomOriginZ - Ge/IsoCenterZ mm

s:Ge/Patient/DicomDirectory      = "Abdomen"
# Create a parallel grid for scroing. "Patient/RTDoseGrid"
s:Ge/Patient/CloneRTDoseGridFrom = Ge/Patient/DicomDirectory + "/rtdose.dcm"
b:Ge/Patient/IgnoreInconsistentFrameOfReferenceUID = "True"

sv:Ge/Patient/DicomModalityTags = 1 "CT"

# Specify which slices to show.
# Comment this out or set to zero to show all slices.
# Set to -1 to show only center slice.
# Set to -2 to show first, center and last slice.
#iv:Ge/Patient/ShowSpecificSlicesX = 1 -2
#iv:Ge/Patient/ShowSpecificSlicesY = 1 -2
iv:Ge/Patient/ShowSpecificSlicesZ = 1 -1


###################################################
##----  Beam setup   ----#
####################################################

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 60.23 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 1. cm
d:So/Example/BeamPositionCutoffY      = 1. cm
d:So/Example/BeamPositionSpreadX      = 0.2 cm
d:So/Example/BeamPositionSpreadY      = 0.2 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 10

###################################################
# Dose calculation
####################################################
# scoring dose on DoseGrid from RTDOSE
# "Patient/RTDose"

s:Sc/DoseOnRTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnRTGrid/Component                 = "Patient/RTDoseGrid"
b:Sc/DoseOnRTGrid/OutputToConsole           = "F"
s:Sc/DoseOnRTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseOnRTGrid/OutputType                = "DICOM"
b:Sc/DoseOnRTGrid/DICOMOutput32BitsPerPixel = "True"

###################################################
# Visualization
####################################################

s:Gr/ViewA/Type        = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta       = 265 deg
d:Gr/ViewA/Phi         = -90 deg
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1000000

s:Gr/ViewA/AxesComponent  = "World"
b:Gr/ViewA/IncludeAxes    = "true"
d:Gr/ViewA/AxesSize       = 30.0 cm
u:Gr/ViewA/Zoom           = 1.5

s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 10 deg

i:Ts/NumberOfThreads = 1
