# Writes phase space separately for several time intervals

b:Ge/World/Invisible = "TRUE"

s:Ge/VacFilm/Type="TsBox"
s:Ge/VacFilm/Parent="World"
s:Ge/VacFilm/Material="G4_WATER"
d:Ge/VacFilm/HLX=50.0 cm
d:Ge/VacFilm/HLY=50.0 cm
d:Ge/VacFilm/HLZ=1.0 cm
d:Ge/VacFilm/TransX=0. cm
d:Ge/VacFilm/TransY=0. cm
d:Ge/VacFilm/TransZ=0. cm
d:Ge/VacFilm/RotX=0. deg
d:Ge/VacFilm/RotY= 0.0 deg
d:Ge/VacFilm/RotZ=0. deg
s:Ge/VacFilm/Color="skyblue"

s:Sc/PhaseSpaceAtVacFilm/Quantity = "PhaseSpace"
b:Sc/PhaseSpaceAtVacFilm/OutputToConsole = "True"
s:Sc/PhaseSpaceAtVacFilm/Surface = "VacFilm/ZMinusSurface"
s:Sc/PhaseSpaceAtVacFilm/OutputType = "ASCII" # ASCII or Binary
s:Sc/PhaseSpaceAtVacFilm/OutputFile = "ASCIIOutput"
i:Sc/PhaseSpaceAtVacFilm/PhaseSpaceBufferSize = 1000
#s:Sc/PhaseSpaceAtVacFilm/OnlyIncludeParticlesGoing = "In"
b:Sc/PhaseSpaceAtVacFilm/IncludeRunID   = "True"
b:Sc/PhaseSpaceAtVacFilm/IncludeEventID = "True"
b:Sc/PhaseSpaceAtVacFilm/IncludeTrackID = "True"
b:Sc/PhaseSpaceAtVacFilm/IncludeTime = "True"
b:Sc/PhaseSpaceAtVacFilm/IncludeSeed = "True"
#sv:Sc/PhaseSpaceAtVacFilm/OnlyIncludeParticlesNamed = 1 "Proton"
s:Sc/PhaseSpaceAtVacFilm/IfOutputFileAlreadyExists = "Overwrite" # Exit, Overwrite or Increment
b:Sc/PhaseSpaceAtVacFilm/OutputAfterRun = "True"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

Tf/TimelineEnd = 100.0 ms
Tf/NumberOfSequentialTimes = 4

So/Default/NumberOfHistoriesInRun=10

Ts/PauseBeforeQuit = "True"
