# Write ASCII phase space with ion beam

b:Ge/World/Invisible = "TRUE"

s:Ge/VacFilm/Type="TsBox"
s:Ge/VacFilm/Parent="World"
s:Ge/VacFilm/Material="Vacuum"
d:Ge/VacFilm/HLX=50.0 cm
d:Ge/VacFilm/HLY=50.0 cm
d:Ge/VacFilm/HLZ=1.0 cm
d:Ge/VacFilm/TransX=0. cm
d:Ge/VacFilm/TransY=0. cm
d:Ge/VacFilm/TransZ=0. cm
d:Ge/VacFilm/RotX=0. deg
d:Ge/VacFilm/RotY= 0.0 deg
d:Ge/VacFilm/RotZ=0. deg
s:Ge/VacFilm/Color="skyblue"

s:Sc/PhaseSpaceAtVacFilm/Quantity = "PhaseSpace"
b:Sc/PhaseSpaceAtVacFilm/OutputToConsole = "True"
s:Sc/PhaseSpaceAtVacFilm/Surface = "VacFilm/ZMinusSurface"
s:Sc/PhaseSpaceAtVacFilm/OutputType = "ASCII" # ASCII, Binary or Limited
s:Sc/PhaseSpaceAtVacFilm/OutputFile = "ASCIIOutput"
i:Sc/PhaseSpaceAtVacFilm/PhaseSpaceBufferSize = 1000
sv:Sc/PhaseSpaceAtVacFilm/OnlyIncludeParticlesNamed = 1 "GenericIon(3,7,0)"
s:Sc/PhaseSpaceAtVacFilm/IfOutputFileAlreadyExists = "Overwrite"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

Ph/Default/Type = "QGSP_BIC_HP"

So/Default/BeamParticle = "GenericIon(3,7,0)"
So/Default/BeamEnergy = 400 MeV
So/Default/NumberOfHistoriesInRun=4

Ts/ShowHistoryCountAtInterval = 10
Ts/PauseBeforeQuit = "True"
