Ge/World/Material = "Vacuum"
Ge/World/HLX=2.0 m
Ge/World/HLY=2.0 m
Ge/World/HLZ=2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type="TsBox"
s:Ge/Phantom/Parent="World"
s:Ge/Phantom/Material="Water"
d:Ge/Phantom/HLX=30.0 cm
d:Ge/Phantom/HLY=30.0 cm
d:Ge/Phantom/HLZ=30.0 cm
d:Ge/Phantom/TransZ= -30. cm
s:Ge/Phantom/Color="blue"
i:Ge/Phantom/XBins = 10
i:Ge/Phantom/YBins = 10
i:Ge/Phantom/ZBins = 10
includeFile = VoxelMaterials.txt
d:Ge/Phantom/RotY = 270 deg

s:Sc/DoseAtPhantom/Quantity    = "DoseToMedium"
s:Sc/DoseAtPhantom/Component   = "Phantom"
b:Sc/DoseAtPhantom/OutputToConsole = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite" 

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
#d:Gr/ViewA/Theta = 55 deg
#d:Gr/ViewA/Phi = 20 deg
#s:Gr/ViewA/Projection = "Perspective"
#d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

Ph/Default/Modules = 1 "g4em-standard_opt0"

So/Default/NumberOfHistoriesInRun = 100
Ts/ShowHistoryCountAtInterval = 10000
Ts/NumberOfThreads = 7

Ts/PauseBeforeQuit = "True"
