# Score dose to a cumulative volume histogram

Ge/World/Material = "Vacuum"
Ge/World/HLX=2.0 m
Ge/World/HLY=2.0 m
Ge/World/HLZ=2.0 m

s:Ge/Phantom/Type="TsBox"
s:Ge/Phantom/Parent="World"
s:Ge/Phantom/Material="Lead"
d:Ge/Phantom/HLX=30.0 cm
d:Ge/Phantom/HLY=30.0 cm
d:Ge/Phantom/HLZ=10.0 cm
d:Ge/Phantom/TransX=0. cm
d:Ge/Phantom/TransY=0. cm
d:Ge/Phantom/TransZ= -30. cm
d:Ge/Phantom/RotX=0. deg
d:Ge/Phantom/RotY= 0.0 deg
d:Ge/Phantom/RotZ=0. deg
s:Ge/Phantom/Color="blue"
i:Ge/Phantom/XBins = 10
i:Ge/Phantom/YBins = 10
i:Ge/Phantom/ZBins = 10

s:Sc/DoseAtPhantom/Quantity    = "DoseToMedium"
s:Sc/DoseAtPhantom/Component   = "Phantom"
b:Sc/DoseAtPhantom/OutputToConsole = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/DoseAtPhantom/Report = 2 "Sum" "CumulativeVolumeHistogram"
i:Sc/DoseAtPhantom/HistogramBins = 100
d:Sc/DoseAtPhantom/HistogramMin = 0. Gy
d:Sc/DoseAtPhantom/HistogramMax = .0001 Gy

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

So/Default/NumberOfHistoriesInRun = 100

Ts/PauseBeforeQuit = "True"
