# Score surface track count of primary protons
# in energy bins in two phantoms

Ge/World/Material = "Vacuum"
Ge/World/HLX=2.0 m
Ge/World/HLY=2.0 m
Ge/World/HLZ=2.0 m
b:Ge/World/Invisible = "TRUE"

s:Ge/WaterBox/Type="TsBox"
s:Ge/WaterBox/Parent="World"
s:Ge/WaterBox/Material="Water"
d:Ge/WaterBox/HLX=30.0 cm
d:Ge/WaterBox/HLY=30.0 cm
d:Ge/WaterBox/HLZ=2.0 cm
d:Ge/WaterBox/TransZ= -20. cm

s:Ge/LeadBox/Type="TsBox"
s:Ge/LeadBox/Parent="World"
s:Ge/LeadBox/Material="Lead"
d:Ge/LeadBox/HLX=30.0 cm
d:Ge/LeadBox/HLY=30.0 cm
d:Ge/LeadBox/HLZ=10.0 cm
d:Ge/LeadBox/TransZ= -40. cm
d:Ge/LeadBox/RotX=0. deg
d:Ge/LeadBox/RotY= 0.0 deg
d:Ge/LeadBox/RotZ=0. deg

s:Sc/EnergyDepAtPhantom/Quantity    = "SurfaceTrackCount"
s:Sc/EnergyDepAtPhantom/Surface   = "WaterBox/ZPlusSurface"
b:Sc/EnergyDepAtPhantom/OutputToConsole = "True"
s:Sc/EnergyDepAtPhantom/OutputType = "csv"
s:Sc/EnergyDepAtPhantom/IfOutputFileAlreadyExists = "Overwrite" 
i:Sc/EnergyDepAtPhantom/EBins = 10
sv:Sc/EnergyDepAtPhantom/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/EnergyDepAtPhantom/OnlyIncludeParticlesOfGeneration = "primary"
d:Sc/EnergyDepAtPhantom/EBinMin = 0. MeV
d:Sc/EnergyDepAtPhantom/EBinMax = 100. MeV

s:Sc/EnergyDepAtPhantom2/Quantity    = "SurfaceTrackCount"
s:Sc/EnergyDepAtPhantom2/Surface   = "LeadBox/ZPlusSurface"
b:Sc/EnergyDepAtPhantom2/OutputToConsole = "True"
s:Sc/EnergyDepAtPhantom2/OutputType = "csv"
s:Sc/EnergyDepAtPhantom2/IfOutputFileAlreadyExists = "Overwrite" 
i:Sc/EnergyDepAtPhantom2/EBins = 10
sv:Sc/EnergyDepAtPhantom2/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/EnergyDepAtPhantom2/OnlyIncludeParticlesOfGeneration = "primary"
d:Sc/EnergyDepAtPhantom2/EBinMin = 0. MeV
d:Sc/EnergyDepAtPhantom2/EBinMax = 100. MeV

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

So/Default/NumberOfHistoriesInRun=1000

Ts/ShowHistoryCountAtInterval = 10
Ts/PauseBeforeQuit = "True"