# Test scoring in geometry of particle passing through a foil to a cylinder

Ge/World/Material = "Vacuum"
Ge/World/HLX=2.0 m
Ge/World/HLY=2.0 m
Ge/World/HLZ=2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Foil/Type="TsBox"
s:Ge/Foil/Parent="World"
s:Ge/Foil/Material="Lead"
d:Ge/Foil/HLX=30.0 cm
d:Ge/Foil/HLY=30.0 cm
d:Ge/Foil/HLZ=.5 cm
d:Ge/Foil/TransX=0. cm
d:Ge/Foil/TransY=0. cm
d:Ge/Foil/TransZ= -10. cm
d:Ge/Foil/RotX=0. deg
d:Ge/Foil/RotY= 0.0 deg
d:Ge/Foil/RotZ=0. deg
s:Ge/Foil/Color="blue"
i:Ge/Foil/XBins = 1
i:Ge/Foil/YBins = 1
i:Ge/Foil/ZBins = 1

s:Ge/Cylinder/Type="TsCylinder"
s:Ge/Cylinder/Parent="World"
s:Ge/Cylinder/Material="Vacuum"
d:Ge/Cylinder/RMin=50.0 cm
d:Ge/Cylinder/RMax=55.0 cm
d:Ge/Cylinder/SPhi=20.0 deg
d:Ge/Cylinder/DPhi=100. deg
d:Ge/Cylinder/HL=50. cm
d:Ge/Cylinder/TransX=0. cm
d:Ge/Cylinder/TransY=0. cm
d:Ge/Cylinder/TransZ= -30. cm
d:Ge/Cylinder/RotX=0. deg
d:Ge/Cylinder/RotY= 0.0 deg
d:Ge/Cylinder/RotZ=0. deg
s:Ge/Cylinder/Color="blue"
i:Ge/Cylinder/RBins = 2

s:Sc/MyScorer/Quantity    = "SurfaceTrackCount"
s:Sc/MyScorer/Surface   = "Cylinder/OuterCurvedSurface"
b:Sc/MyScorer/OutputToConsole = "True"
s:Sc/MyScorer/OutputType = "csv"
s:Sc/MyScorer/IfOutputFileAlreadyExists = "Overwrite" 
#i:Sc/MyScorer/EBins = 10
s:Sc/MyScorer/OnlyIncludeParticlesGoing = "Out"
#sv:Sc/MyScorer/OnlyIncludeParticlesNamed = 1 "gamma"
s:Sc/MyScorer/OnlyIncludeParticlesOfGeneration = "secondary"
#d:Sc/MyScorer/EBinMin = 0. MeV
d:Sc/MyScorer/EBinMax = 110. MeV
#d:Sc/MyScorer/OnlyIncludeIfIncidentParticleKEAbove = 0 MeV 

# Graphics
s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

So/Default/NumberOfHistoriesInRun = 10

Ts/PauseBeforeQuit = "True"
