# Demonstrates how scoring can be split by a time feature.
# In this example, though the time feature ImageName doesn't really get # used to load any images,
# the scoring is still split by this time feature.
# This means that separate scorers are created for each of the
# three values of ImageName, and each scorer is active only when
# the ImageName value matches the that scorer's required value.

s:Ge/Phantom/Type="TsBox"
s:Ge/Phantom/Parent="World"
s:Ge/Phantom/Material="Water"
d:Ge/Phantom/HLX=80.0 cm
d:Ge/Phantom/HLY=80.0 cm
d:Ge/Phantom/HLZ=80.0 cm
d:Ge/Phantom/TransX=0. cm
d:Ge/Phantom/TransY=0. cm
d:Ge/Phantom/TransZ= -30. cm
d:Ge/Phantom/RotX=0. deg
d:Ge/Phantom/RotY=0. deg
d:Ge/Phantom/RotZ=0. deg

s:Sc/DoseAtPhantom/Quantity    = "DoseToMedium"
s:Sc/DoseAtPhantom/Component   = "Phantom"
b:Sc/DoseAtPhantom/OutputToConsole = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite" 
s:Sc/DoseAtPhantom/SplitByTimeFeature = "ImageName"

# This time feature will take one of three string values.
s:Tf/ImageName/Function = "Step"
dv:Tf/ImageName/Times = 3 10 20 30 ms
sv:Tf/ImageName/Values = 3 "lung1" "lung2" "lung3"
Tf/TimelineEnd = 40.0 ms
Tf/NumberOfSequentialTimes = 4
i:Tf/Verbosity = 1

Ph/Default/Modules = 1 "g4em-standard_opt0"
So/Default/NumberOfHistoriesInRun = 100

s:Gr/View/Type = "OpenGL"