# Demonstrates step time feature by changing a box's color over time

Ge/World/HLX=10. m
Ge/World/HLY=10. m
Ge/World/HLZ=10. m
b:Ge/World/Invisible = "TRUE"

s:Ge/BigBox/Parent="World"
s:Ge/BigBox/Type="G4Box"
s:Ge/BigBox/Material="Air"
d:Ge/BigBox/HLX=2. m
d:Ge/BigBox/HLY=3. m
d:Ge/BigBox/HLZ=4. m
d:Ge/BigBox/TransX=0. m
d:Ge/BigBox/TransY=0. m
d:Ge/BigBox/TransZ=0. m
d:Ge/BigBox/RotX=0. deg
d:Ge/BigBox/RotY=0. deg
d:Ge/BigBox/RotZ=0. deg
s:Ge/BigBox/Color = Tf/Color/Value

s:Tf/Color/Function = "Step"
sv:Tf/Color/Values = 4 "white" "blue" "green" "red"
dv:Tf/Color/Times = 4 1. 2. 3. 4. ms

i:Tf/Verbosity = 1
d:Tf/TimelineEnd= 60.0 ms
i:Tf/NumberOfSequentialTimes = 60

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1024
i:Gr/ViewA/WindowSizeY = 768
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
u:Gr/ViewA/Zoom = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg

Ph/Default/Modules = 1 "g4em-standard_opt0"

So/Default/NumberOfHistoriesInRun=10

Ts/PauseBeforeQuit = "True"
