# Demonstrates direction of rotations in TOPAS placements
# by rotating a simple structure three ways.
# First, it rotates in the X direction.
# Then, after resetting, it rotates in the Y direction.
# Then, after resetting, it rotates in the Z direction.

Ge/World/HLX = 1.1 cm
Ge/World/HLY = 1.1 cm
Ge/World/HLZ = 1.1 cm
s:Ge/World/Color = "black"

s:Ge/system/Parent = "World"
s:Ge/system/Type   = "Group"
d:Ge/system/RotX   = Tf/rotationX/Value deg
d:Ge/system/RotY   = Tf/rotationY/Value deg
d:Ge/system/RotZ   = Tf/rotationZ/Value deg

s:Ge/tet/Parent   = "system"
s:Ge/tet/Material = "Air"
s:Ge/tet/Type     = "G4Tet"
dv:Ge/tet/Anchor  = 3 0 0 1 cm 
dv:Ge/tet/P2      = 3 1 0 0 cm 
dv:Ge/tet/P3      = 3 0 1 0 cm
dv:Ge/tet/P4      = 3 0 0 0 cm 
s:Ge/tet/Color    = "yellow"
#d:Ge/tet/RotX    = Tf/rotationX/Value deg
#d:Ge/tet/RotY    = Tf/rotationY/Value deg
#d:Ge/tet/RotZ    = Tf/rotationZ/Value deg

s:Ge/pointz/Parent = "system"
s:Ge/pointz/Material = "Air"
s:Ge/pointz/Type = "G4Orb"
d:Ge/pointz/R = 0.2 mm
s:Ge/pointz/Color = "blue"
s:Ge/pointz/DrawingStyle = "solid"
d:Ge/pointz/TransZ = 1 cm

s:Ge/pointy/Parent = "system"
s:Ge/pointy/Material = "Air"
s:Ge/pointy/Type = "G4Orb"
d:Ge/pointy/R = 0.2 mm
s:Ge/pointy/Color = "grass"
s:Ge/pointy/DrawingStyle = "solid"
d:Ge/pointy/TransY = 1 cm

s:Ge/pointx/Parent = "system"
s:Ge/pointx/Material = "Air"
s:Ge/pointx/Type = "G4Orb"
d:Ge/pointx/R = 0.2 mm
s:Ge/pointx/Color = "red"
s:Ge/pointx/DrawingStyle = "solid"
d:Ge/pointx/TransX = 1 cm

s:Tf/rotationX/Function = "Step"
dv:Tf/rotationX/Times =  288 
1  2  3  4  5  6  7  8  9  10  11  12  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288  ms
dv:Tf/rotationX/Values =  288
1  2  3  4  5  6  7  8  9  10  11  12  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0 deg

s:Tf/rotationY/Function = "Step"
dv:Tf/rotationY/Times =  288
1  2  3  4  5  6  7  8  9  10  11  12  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288  ms
dv:Tf/rotationY/Values = 288 
0  0  0  0  0  0  0  0  0  0  0  0  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0 deg

s:Tf/rotationZ/Function = "Step"
dv:Tf/rotationZ/Times =  288
1  2  3  4  5  6  7  8  9  10  11  12  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288  ms
dv:Tf/rotationZ/Values = 288
0  0  0  0  0  0  0  0  0  0  0  0  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90 deg 

d:Tf/TimelineEnd = 288 ms 
i:Tf/NumberOfSequentialTimes = 288
b:Ts/ShowCPUTime = "True"

s:Gr/view/Type = "OpenGl"
b:Gr/view/IncludeAxes = "True"
d:Gr/view/AxesSize = 1 cm
d:Gr/view/Theta = 45 deg
d:Gr/view/Phi   = 45 deg
u:Gr/view/Zoom = 1.8

Ph/Default/Modules = 1 "g4em-standard_opt0"
Ge/CheckForOverlaps = "False"

b:Ts/PauseBeforeQuit = "True"

i:So/Default/NumberOfHistoriesInRun = 1
